CellProfiler Pipeline: http://www.cellprofiler.org
Version:5
DateRevision:426
GitHash:
ModuleCount:16
HasImagePlaneDetails:False

Images:[module_num:1|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
    Filter images?:Custom
    Select the rule criteria:and (file does contain "maxproj") (extension does istif) (file doesnot contain "corrected")

Metadata:[module_num:2|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
    Extract metadata?:No
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
NamesAndTypes:[module_num:3|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
    Assign a name to:Images matching rules
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    Image set matching method:Order
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    Assignments count:4
    Single images count:0
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    Process as 3D?:No
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    Select the rule criteria:and (file does contain "ch01")
    Name to assign these images:DAPI
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    Select the image type:Grayscale image
    Set intensity range from:Image bit-depth
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    Select the rule criteria:and (file does contain "ch02")
    Name to assign these images:Tubulin
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    Select the image type:Grayscale image
    Set intensity range from:Image bit-depth
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    Select the rule criteria:and (file does contain "ch03")
    Name to assign these images:Marker
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    Select the image type:Grayscale image
    Set intensity range from:Image bit-depth
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    Select the rule criteria:and (file does contain "ch04")
    Name to assign these images:HPA
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    Select the image type:Grayscale image
    Set intensity range from:Image bit-depth
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
Groups:[module_num:4|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
    Do you want to group your images?:No
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
CorrectIlluminationCalculate:[module_num:5|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
    Select the input image:DAPI
    Name the output image:IllumDAPI
    Select how the illumination function is calculated:Regular
    Dilate objects in the final averaged image?:No
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    Rescale the illumination function?:Yes
    Calculate function for each image individually, or based on all images?:Each
    Smoothing method:Fit Polynomial
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    Retain the averaged image?:No
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    Retain the dilated image?:No
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
CorrectIlluminationCalculate:[module_num:6|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
    Select the input image:HPA
    Name the output image:IllumHPA
    Select how the illumination function is calculated:Regular
    Dilate objects in the final averaged image?:No
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    Rescale the illumination function?:Yes
    Calculate function for each image individually, or based on all images?:Each
    Smoothing method:Fit Polynomial
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    Retain the averaged image?:No
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    Retain the dilated image?:No
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
CorrectIlluminationCalculate:[module_num:7|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
    Select the input image:Tubulin
    Name the output image:IllumTubulin
    Select how the illumination function is calculated:Regular
    Dilate objects in the final averaged image?:No
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    Rescale the illumination function?:Yes
    Calculate function for each image individually, or based on all images?:Each
    Smoothing method:Fit Polynomial
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    Retain the averaged image?:No
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    Retain the dilated image?:No
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
CorrectIlluminationCalculate:[module_num:8|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
    Select the input image:Marker
    Name the output image:IllumMarker
    Select how the illumination function is calculated:Regular
    Dilate objects in the final averaged image?:No
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    Rescale the illumination function?:Yes
    Calculate function for each image individually, or based on all images?:Each
    Smoothing method:Fit Polynomial
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    Retain the averaged image?:No
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    Retain the dilated image?:No
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
CorrectIlluminationApply:[module_num:9|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
    Select the input image:Tubulin
    Name the output image:CorrTubulin
    Select the illumination function:IllumTubulin
    Select how the illumination function is applied:Divide
    Select the input image:Marker
    Name the output image:CorrMarker
    Select the illumination function:IllumMarker
    Select how the illumination function is applied:Divide
    Select the input image:DAPI
    Name the output image:CorrDAPI
    Select the illumination function:IllumDAPI
    Select how the illumination function is applied:Divide
    Select the input image:HPA
    Name the output image:CorrHPA
    Select the illumination function:IllumHPA
    Select how the illumination function is applied:Divide
    Set output image values less than 0 equal to 0?:Yes
    Set output image values greater than 1 equal to 1?:Yes

SaveImages:[module_num:10|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
    Select the type of image to save:Image
    Select the image to save:CorrDAPI
    Select method for constructing file names:From image filename
    Select image name for file prefix:DAPI
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    Append a suffix to the image file name?:Yes
    Text to append to the image name:_corrected
    Saved file format:tiff
    Output file location:Same folder as image|
    Image bit depth:16-bit integer
    Overwrite existing files without warning?:Yes
    When to save:Every cycle
    Record the file and path information to the saved image?:No
    Create subfolders in the output folder?:No
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    Save with lossless compression?:Yes

SaveImages:[module_num:11|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
    Select the type of image to save:Image
    Select the image to save:CorrTubulin
    Select method for constructing file names:From image filename
    Select image name for file prefix:Tubulin
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    Append a suffix to the image file name?:Yes
    Text to append to the image name:_corrected
    Saved file format:tiff
    Output file location:Same folder as image|
    Image bit depth:16-bit integer
    Overwrite existing files without warning?:Yes
    When to save:Every cycle
    Record the file and path information to the saved image?:No
    Create subfolders in the output folder?:No
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    Save with lossless compression?:Yes

SaveImages:[module_num:12|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
    Select the type of image to save:Image
    Select the image to save:CorrHPA
    Select method for constructing file names:From image filename
    Select image name for file prefix:HPA
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    Append a suffix to the image file name?:Yes
    Text to append to the image name:_corrected
    Saved file format:tiff
    Output file location:Same folder as image|
    Image bit depth:16-bit integer
    Overwrite existing files without warning?:Yes
    When to save:Every cycle
    Record the file and path information to the saved image?:No
    Create subfolders in the output folder?:No
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    Save with lossless compression?:Yes

SaveImages:[module_num:13|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
    Select the type of image to save:Image
    Select the image to save:CorrMarker
    Select method for constructing file names:From image filename
    Select image name for file prefix:Marker
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    Append a suffix to the image file name?:Yes
    Text to append to the image name:_corrected
    Saved file format:tiff
    Output file location:Same folder as image|
    Image bit depth:16-bit integer
    Overwrite existing files without warning?:Yes
    When to save:Every cycle
    Record the file and path information to the saved image?:No
    Create subfolders in the output folder?:No
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    Save with lossless compression?:Yes

CorrectIlluminationCalculate:[module_num:14|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enabled:False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
    Select the input image:MDA
    Name the output image:IllumMDA
    Select how the illumination function is calculated:Regular
    Dilate objects in the final averaged image?:No
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    Rescale the illumination function?:Yes
    Calculate function for each image individually, or based on all images?:Each
    Smoothing method:Fit Polynomial
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    Retain the averaged image?:No
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    Retain the dilated image?:No
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
CorrectIlluminationApply:[module_num:15|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enabled:False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
    Select the input image:Tubulin
    Name the output image:CorrTubulin
    Select the illumination function:IllumTubulin
    Select how the illumination function is applied:Divide
    Select the input image:Marker
    Name the output image:CorrMarker
    Select the illumination function:IllumMarker
    Select how the illumination function is applied:Divide
    Select the input image:DAPI
    Name the output image:CorrDAPI
    Select the illumination function:IllumDAPI
    Select how the illumination function is applied:Divide
    Select the input image:HPA
    Name the output image:CorrHPA
    Select the illumination function:IllumHPA
    Select how the illumination function is applied:Divide
    Select the input image:MDA
    Name the output image:CorrMDA
    Select the illumination function:IllumMDA
    Select how the illumination function is applied:Divide
    Set output image values less than 0 equal to 0?:Yes
    Set output image values greater than 1 equal to 1?:Yes

SaveImages:[module_num:16|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enabled:False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
    Select the type of image to save:Image
    Select the image to save:CorrMDA
    Select method for constructing file names:From image filename
    Select image name for file prefix:MDA
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    Append a suffix to the image file name?:Yes
    Text to append to the image name:_corrected
    Saved file format:tiff
    Output file location:Same folder as image|
    Image bit depth:16-bit integer
    Overwrite existing files without warning?:Yes
    When to save:Every cycle
    Record the file and path information to the saved image?:No
    Create subfolders in the output folder?:No
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    Save with lossless compression?:Yes
